<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:dlc="clr-namespace:Bonsai.DeepLabCut;assembly=Bonsai.DeepLabCut"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:ffmpeg="clr-namespace:Bonsai.FFmpeg;assembly=Bonsai.FFmpeg"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Canvas</Name>
        <Description>Used to render the projection and the dot</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:CreateSerialPort">
                <port:PortName>COM3</port:PortName>
                <port:BaudRate>12000000</port:BaudRate>
                <port:NewLine>\r\n</port:NewLine>
                <port:Parity>None</port:Parity>
                <port:ParityReplace>63</port:ParityReplace>
                <port:DataBits>8</port:DataBits>
                <port:StopBits>One</port:StopBits>
                <port:Handshake>None</port:Handshake>
                <port:DiscardNull>false</port:DiscardNull>
                <port:DtrEnable>true</port:DtrEnable>
                <port:RtsEnable>false</port:RtsEnable>
                <port:ReadBufferSize>4096</port:ReadBufferSize>
                <port:WriteBufferSize>2048</port:WriteBufferSize>
                <port:ReceivedBytesThreshold>1</port:ReceivedBytesThreshold>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:CreateSerialPort">
                <port:PortName>COM7</port:PortName>
                <port:BaudRate>500000</port:BaudRate>
                <port:NewLine>\n</port:NewLine>
                <port:Parity>None</port:Parity>
                <port:ParityReplace>63</port:ParityReplace>
                <port:DataBits>8</port:DataBits>
                <port:StopBits>One</port:StopBits>
                <port:Handshake>None</port:Handshake>
                <port:DiscardNull>false</port:DiscardNull>
                <port:DtrEnable>false</port:DtrEnable>
                <port:RtsEnable>false</port:RtsEnable>
                <port:ReadBufferSize>4096</port:ReadBufferSize>
                <port:WriteBufferSize>2048</port:WriteBufferSize>
                <port:ReceivedBytesThreshold>1</port:ReceivedBytesThreshold>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:CreateSerialPort">
                <port:PortName>COM8</port:PortName>
                <port:BaudRate>9600</port:BaudRate>
                <port:NewLine>\n</port:NewLine>
                <port:Parity>None</port:Parity>
                <port:ParityReplace>63</port:ParityReplace>
                <port:DataBits>8</port:DataBits>
                <port:StopBits>One</port:StopBits>
                <port:Handshake>None</port:Handshake>
                <port:DiscardNull>false</port:DiscardNull>
                <port:DtrEnable>false</port:DtrEnable>
                <port:RtsEnable>false</port:RtsEnable>
                <port:ReadBufferSize>4096</port:ReadBufferSize>
                <port:WriteBufferSize>2048</port:WriteBufferSize>
                <port:ReceivedBytesThreshold>1</port:ReceivedBytesThreshold>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
              <Left>-1</Left>
              <Right>1</Right>
              <Bottom>-1</Bottom>
              <Top>1</Top>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Canvas</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:LoadImage">
                <cv:FileName>C:\Users\psych-aalab\Downloads\f1_sprite.png</cv:FileName>
                <cv:Mode>Unchanged</cv:Mode>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Flip">
                <cv:Mode>Vertical</cv:Mode>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateTexture">
                <gl:TextureName>f1</gl:TextureName>
                <gl:TextureTarget>Texture2D</gl:TextureTarget>
                <gl:InternalFormat>Rgba</gl:InternalFormat>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:LoadImage">
                <cv:FileName>f3sprite_t.png</cv:FileName>
                <cv:Mode>Unchanged</cv:Mode>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Flip">
                <cv:Mode>Vertical</cv:Mode>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateTexture">
                <gl:TextureName>f3</gl:TextureName>
                <gl:TextureTarget>Texture2D</gl:TextureTarget>
                <gl:InternalFormat>Rgba</gl:InternalFormat>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:LoadImage">
                <cv:FileName>Trial_CSVs\Mixed\Shapes\Green Shapes\greendot.png</cv:FileName>
                <cv:Mode>Unchanged</cv:Mode>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Flip">
                <cv:Mode>Vertical</cv:Mode>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateTexture">
                <gl:TextureName>RP</gl:TextureName>
                <gl:TextureTarget>Texture2D</gl:TextureTarget>
                <gl:InternalFormat>Rgba</gl:InternalFormat>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:LoadImage">
                <cv:FileName>Trial_CSVs\Mixed\Shapes\Cyan Shapes\cyan_cheese.png</cv:FileName>
                <cv:Mode>Unchanged</cv:Mode>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Flip">
                <cv:Mode>Vertical</cv:Mode>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateTexture">
                <gl:TextureName>Cheese</gl:TextureName>
                <gl:TextureTarget>Texture2D</gl:TextureTarget>
                <gl:InternalFormat>Rgba</gl:InternalFormat>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:LoadImage">
                <cv:FileName>Trial_CSVs\Mixed\Shapes\obstacle.png</cv:FileName>
                <cv:Mode>Unchanged</cv:Mode>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Flip">
                <cv:Mode>Vertical</cv:Mode>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateTexture">
                <gl:TextureName>obstacle</gl:TextureName>
                <gl:TextureTarget>Texture2D</gl:TextureTarget>
                <gl:InternalFormat>Rgba</gl:InternalFormat>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:LoadImage">
                <cv:FileName>forest-green-sleep.png</cv:FileName>
                <cv:Mode>Unchanged</cv:Mode>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Flip">
                <cv:Mode>Vertical</cv:Mode>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateTexture">
                <gl:TextureName>sleep_floor</gl:TextureName>
                <gl:TextureTarget>Texture2D</gl:TextureTarget>
                <gl:InternalFormat>Rgba</gl:InternalFormat>
              </Combinator>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>30Hz</Name>
              <Text><![CDATA[]]></Text>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>500</gl:Width>
                <gl:Height>530</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Gray</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location>
                  <gl:X>-1290</gl:X>
                  <gl:Y>305</gl:Y>
                </gl:Location>
                <gl:WindowBorder>Hidden</gl:WindowBorder>
                <gl:WindowState>Normal</gl:WindowState>
                <gl:DisplayDevice>Second</gl:DisplayDevice>
                <gl:TargetRenderFrequency>30</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>PP_Int</Name>
              <Text><![CDATA[]]></Text>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:TextureResources">
                <gl:Textures>
                  <gl:TextureConfiguration xsi:type="gl:Texture2D">
                    <gl:Name>Cheese</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:Texture2D">
                    <gl:Name>Bow</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:Texture2D">
                    <gl:Name>Star</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:Texture2D">
                    <gl:Name>Mickey</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:Texture2D">
                    <gl:Name>RP</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:Texture2D">
                    <gl:Name>f1</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:Texture2D">
                    <gl:Name>Tree</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:Texture2D">
                    <gl:Name>f3</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:Texture2D">
                    <gl:Name>obstacle</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:Texture2D">
                    <gl:Name>sleep_floor</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                  </gl:TextureConfiguration>
                </gl:Textures>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>Space Control</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Stop Workflow</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>S2000</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:SerialWriteLine">
                <port:PortName>COM8</port:PortName>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="37" To="39" Label="Source1" />
            <Edge From="38" To="39" Label="Source2" />
            <Edge From="39" To="41" Label="Source1" />
            <Edge From="40" To="41" Label="Source2" />
            <Edge From="41" To="42" Label="Source1" />
            <Edge From="42" To="43" Label="Source1" />
            <Edge From="43" To="44" Label="Source1" />
            <Edge From="44" To="48" Label="Source1" />
            <Edge From="44" To="50" Label="Source1" />
            <Edge From="45" To="46" Label="Source1" />
            <Edge From="46" To="47" Label="Source1" />
            <Edge From="47" To="48" Label="Source2" />
            <Edge From="48" To="49" Label="Source1" />
            <Edge From="50" To="51" Label="Source1" />
            <Edge From="51" To="52" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Open Ephys</Name>
        <Description>Sends a record signal to OpenEphys to start recording before the camera starts</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Stop Workflow</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Script>import clr
clr.AddReference("System")
from System.Net import WebRequest
from System.IO import StreamReader
from System.Text import Encoding

#Must place in your OE HTTP address
OE_URL = ""

def put_json(endpoint, json_str):
    req = WebRequest.Create(OE_URL + endpoint)
    req.Method = "PUT"
    req.ContentType = "application/json"
    data = Encoding.UTF8.GetBytes(json_str)
    req.ContentLength = data.Length
    stream = req.GetRequestStream()
    stream.Write(data, 0, data.Length)
    stream.Close()
    resp = req.GetResponse()
    reader = StreamReader(resp.GetResponseStream())
    result = reader.ReadToEnd()
    reader.Close()
    resp.Close()
    return result

@returns(bool)
def process(value):
    put_json("/api/status", '{"mode": "IDLE"}')
    return True</ipy:Script>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Spinnaker Setup</Name>
        <Description>Camera Capture</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="spk:SpinnakerCapture">
                <spk:Index xsi:nil="true" />
                <spk:ColorProcessing>Default</spk:ColorProcessing>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>SpinnakerCapture</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Image</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Resize">
                <cv:Size>
                  <cv:Width>640</cv:Width>
                  <cv:Height>480</cv:Height>
                </cv:Size>
                <cv:Interpolation>Linear</cv:Interpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Resized Image</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Annotation">
                <Name>Blackfly Crop</Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>NIR Crop</Name>
              <Text><![CDATA[]]></Text>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:WarpPerspective">
                <cv:Source>
                  <cv:Point2f>
                    <cv:X>177.925308</cv:X>
                    <cv:Y>84.96</cv:Y>
                  </cv:Point2f>
                  <cv:Point2f>
                    <cv:X>177.261414</cv:X>
                    <cv:Y>347.52</cv:Y>
                  </cv:Point2f>
                  <cv:Point2f>
                    <cv:X>500.869568</cv:X>
                    <cv:Y>351.1111</cv:Y>
                  </cv:Point2f>
                  <cv:Point2f>
                    <cv:X>500.869568</cv:X>
                    <cv:Y>95.87302</cv:Y>
                  </cv:Point2f>
                </cv:Source>
                <cv:Destination>
                  <cv:Point2f>
                    <cv:X>0</cv:X>
                    <cv:Y>0</cv:Y>
                  </cv:Point2f>
                  <cv:Point2f>
                    <cv:X>0</cv:X>
                    <cv:Y>480</cv:Y>
                  </cv:Point2f>
                  <cv:Point2f>
                    <cv:X>640</cv:X>
                    <cv:Y>480</cv:Y>
                  </cv:Point2f>
                  <cv:Point2f>
                    <cv:X>640</cv:X>
                    <cv:Y>0</cv:Y>
                  </cv:Point2f>
                </cv:Destination>
                <cv:Flags>Linear</cv:Flags>
                <cv:FillValue>
                  <cv:Val0>0</cv:Val0>
                  <cv:Val1>0</cv:Val1>
                  <cv:Val2>0</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:FillValue>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Stop Workflow</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dlc:PredictPose">
                <dlc:ModelFileName>C:\Users\psych-aalab\Documents\RAFolder\PursuitProtocols\DLC\DLC_PP_tf_test_resnet_50_iteration-0_shuffle-5_blocker3\snapshot-700000.pb</dlc:ModelFileName>
                <dlc:PoseConfigFileName>C:\Users\psych-aalab\Documents\RAFolder\PursuitProtocols\DLC\DLC_PP_tf_test_resnet_50_iteration-0_shuffle-5_blocker3\pose_cfg.yaml</dlc:PoseConfigFileName>
                <dlc:MinConfidence>0.7</dlc:MinConfidence>
                <dlc:ScaleFactor>0.6</dlc:ScaleFactor>
                <dlc:ColorConversion>Gray2Bgr</dlc:ColorConversion>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>PredictPose</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Part Tracking</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>PredictPose</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dlc:GetBodyPart">
                <dlc:Name>nose</dlc:Name>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Position</Selector>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>320</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Sub X</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>320</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Div X</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>240</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Sub Y</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>240</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Div Y</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>Adjust Tracking</scr:Name>
              <scr:Expression>new(
  (-(it.Item1.X - it.Item2)/it.Item3) as Nose_X,
  ((it.Item1.Y - it.Item4)/it.Item5) as Nose_Y
)</scr:Expression>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="scr:ExpressionTransform">
                <scr:Name>Test Tracking</scr:Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Nose Location</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Stop Workflow</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Canvas</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Nose Location</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="LocationX" Selector="Nose_X" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Nose Location</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="LocationY" Selector="Nose_Y" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
              <Diameter>0.1</Diameter>
              <LocationX>NaN</LocationX>
              <LocationY>NaN</LocationY>
              <Layer>1</Layer>
              <ColorR>1</ColorR>
              <ColorG>0</ColorG>
              <ColorB>1</ColorB>
              <ColorA>0</ColorA>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PredictPose</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dlc:GetBodyPart">
                <dlc:Name>green dot</dlc:Name>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Position</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Sub X</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Div X</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Sub Y</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Div Y</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>Adjust Tracking</scr:Name>
              <scr:Expression>new(
  (-(it.Item1.X - it.Item2)/it.Item3) as Dot_X,
  ((it.Item1.Y - it.Item4)/it.Item5) as Dot_Y
)</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Dot Tracking</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="15" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="15" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="15" Label="Source3" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="15" Label="Source4" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source5" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="20" Label="Source1" />
            <Edge From="19" To="20" Label="Source2" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="22" To="27" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="27" Label="Source2" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source3" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="35" Label="Source1" />
            <Edge From="31" To="35" Label="Source2" />
            <Edge From="32" To="35" Label="Source3" />
            <Edge From="33" To="35" Label="Source4" />
            <Edge From="34" To="35" Label="Source5" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Arduino LED</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>STOP</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Stop Workflow</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:SerialWriteLine">
                <port:PortName>COM7</port:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:SerialReadLine">
                <port:PortName>COM7</port:PortName>
                <port:NewLine>\n</port:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionCondition">
              <scr:Expression>it!="END"</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>ArduinoBuffer</Name>
              <rx:BufferSize>1</rx:BufferSize>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Filename</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_LED_.csv</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>E:/Xiaoxiao_pursuit/pp_Int/10022026/PP40/GPA2/PP40_GPA2__LED_.csv</io:FileName>
              <io:Delimiter>,</io:Delimiter>
              <io:ListSeparator>,</io:ListSeparator>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>Timestamp</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Stop Workflow</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT3S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>START</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:SerialWriteLine">
                <port:PortName>COM7</port:PortName>
                <port:NewLine />
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="11" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="13" Label="Source1" />
            <Edge From="12" To="13" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="io:CsvReader">
        <io:FileName>Trial_CSVs\Gap_Testing\Mixed\VM21A-MixedRP61-CP21-gCP21-gf1_10t\Fri\PAM21A-5\PAM21A-5_speed10-35.csv</io:FileName>
        <io:ListSeparator>,</io:ListSeparator>
        <io:ScanPattern>%d</io:ScanPattern>
        <io:SkipRows>1</io:SkipRows>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CSV Logic</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Array</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Array</Name>
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Name>Find Bounds</ipy:Name>
              <ipy:Script>from System import Tuple, Array

first = []
last = []
r = 0
trial = 1
trial_bounds = {}

@returns(list)
def process(value):
  global first, last, r, trial

  for r in range(len(value)):
    if value[r][4] == trial:
      first.append(r)
      if r &gt; 0:
        last.append(r-1)
      trial += 1

  last.append(len(value)-1)
  bounds = list(zip(first, last))
    
  return bounds</ipy:Script>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Trial Bounds</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Array</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Trial Bounds</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Name>Find Bounds</ipy:Name>
              <ipy:Script>from System import Tuple, Array

first = []
last = []
r = 0
trial = 1
trial_type = []

@returns(list)
def process(value):
  global r, trial_type

  if value.Item1[r][7] is not None:
    trial_type = [
      value.Item1[start][7] if len(value.Item1[start]) &gt; 7 else None
      for start, _ in value.Item2[0]
    ]
    
  return trial_type</ipy:Script>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Trial Types</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="11" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>GPA2</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Session Name</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>40</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Mouse Number</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Filename</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source2</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Trial Name</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>Format Filename</scr:Name>
              <scr:Description>Writes out a save path and file name for the save</scr:Description>
              <scr:Expression>"E:/project/run/" + DateTime.Now.ToString("MMddyyyy") + "/" + it.Item1 + "/" + it.Item2
</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Filename</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Stop Workflow</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Description>Saves a Bpod .csv in the same folder</ipy:Description>
              <ipy:Script>import clr
clr.AddReference("System")
from System import IO, DateTime

@returns(str)
def process(value):
    filename_base = str(value)
    
    timestamp = DateTime.Now.ToString("yyyy-MM-dd'T'HH_mm_ss")
    full_path = filename_base + "bpod_" + timestamp + ".csv"
    
    # Create directory tree if it doesn't exist
    directory = IO.Path.GetDirectoryName(full_path)
    if not IO.Directory.Exists(directory):
        IO.Directory.CreateDirectory(directory)
    
    # Write full path to the exchange file
    exchange_path = "C:/BpodExchange/next_session.txt"
    exchange_dir = IO.Path.GetDirectoryName(exchange_path)
    if not IO.Directory.Exists(exchange_dir):
        IO.Directory.CreateDirectory(exchange_dir)
    
    IO.File.WriteAllText(exchange_path, full_path)
    
    return full_path</ipy:Script>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="4" To="9" Label="Source1" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Trajectory Testing</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Canvas Calibration</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>RP/CP/CPP</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Canvas</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Trial Results</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>X</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="LocationX" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Trial Results</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Y</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="LocationY" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Trial Results</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Opacity</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ColorA" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
              <Diameter>0.1</Diameter>
              <LocationX>0.23375</LocationX>
              <LocationY>-0.146666661</LocationY>
              <Layer>1</Layer>
              <ColorR>0</ColorR>
              <ColorG>1</ColorG>
              <ColorB>0</ColorB>
              <ColorA>0</ColorA>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SpinnakerCapture</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>ChunkData.FrameID</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>FrameID</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Array</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:SerialRead">
                <port:PortName>COM3</port:PortName>
                <port:Count>1</port:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                      <Value>12</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Arrow</Name>
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Name>Trial Count</ipy:Name>
              <ipy:Script>from System import Tuple

trial = -1
check = False

@returns(Tuple[float, bool])
def process(value):
  global trial, check
  if trial + 1 != 30 and check == False:
    trial += 1
  else:
    trial = 0
    check = True
  return Tuple[float, bool](trial, check)</ipy:Script>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Trial Count</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Nose Location</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Trial Bounds</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>Capture Distance</scr:Name>
              <scr:Expression>it</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Dot Tracking</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="ipy:PythonTransform">
                <ipy:Name>Pred Trial Logic_old</ipy:Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Name>Pred Trial Logic</ipy:Name>
              <ipy:Script>from System import Tuple
import math

r = 0
state = 1
a = 0
success = 0
trial_type = None
mouse_history = []
max_history = 5

@returns(Tuple[float, float, float, float, float, float, float])
def process(value):
  global r, state, a, success, trial_type, mouse_history
  min_row = value.Item2.Item4[0][int(value.Item2.Item2)][0]
  max_row = value.Item2.Item4[0][int(value.Item2.Item2)][1]
  x = -value.Item2.Item1[r][3]
  y = value.Item2.Item1[r][2]
  mx = value.Item2.Item3.Nose_X
  my = value.Item2.Item3.Nose_Y

  # --- Prediction ---
  mouse_history.append((mx, my))
  if len(mouse_history) &gt; max_history:
    mouse_history[:] = mouse_history[-max_history:]

  if len(mouse_history) &gt;= 2:
    vx = (mx - mouse_history[0][0]) / len(mouse_history)
    vy = (my - mouse_history[0][1]) / len(mouse_history)
    pmx = mx + vx * 2
    pmy = my + vy * 2

    # --- Angle gate ---
    dmx = pmx - mx
    dmy = pmy - my
    dtx = x - mx
    dty = y - my
    mag1 = math.sqrt(dmx**2 + dmy**2)
    mag2 = math.sqrt(dtx**2 + dty**2)
    if mag1 &gt; 0.001 and mag2 &gt; 0.001:
      cos_a = max(-1, min(1, (dmx*dtx + dmy*dty) / (mag1 * mag2)))
      angle = math.acos(cos_a) * 180 / math.pi
    else:
      angle = 0
  else:
    pmx = mx
    pmy = my
    angle = 0

  dist = math.sqrt((x - pmx) ** 2 + (y - pmy) ** 2)

  if value.Item2.Item2 == 0 and success &gt; 1:
    a = 0
    state = 6
  elif dist &lt; value.Item2.Item6 and state == 1 and value.Item2.Item2 &gt;= 0:
    state = 2
  elif r &lt; min_row:
    r = min_row
  elif r &lt; max_row and state == 2:
    r += 1
    a = 1
    if dist &lt; value.Item2.Item5 and angle &lt; 70:
      r = max_row
      a = 0
      state = 3
      success += 1
  elif state == 3 or state == 4:
    state = 5
  elif r &gt;= max_row and state == 2:
    r = max_row
    a = 0
    state = 4
  elif r != max_row:
    a = 1
    state = 1

  return Tuple[float, float, float, float, float, float, float](x, y, mx, my, success, a, state)</ipy:Script>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="ipy:PythonTransform">
                <ipy:Name>GD Trial Logic</ipy:Name>
                <ipy:Description>Runs the current trial until the next trial is reached</ipy:Description>
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="ipy:PythonTransform">
                <ipy:Name>Trial Logic</ipy:Name>
                <ipy:Description>Runs the current trial until the next trial is reached</ipy:Description>
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="ipy:PythonTransform">
                <ipy:Name>Trial Logic DLC</ipy:Name>
                <ipy:Description>Runs the current trial until the next trial is reached</ipy:Description>
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              </Builder>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>Format Results</scr:Name>
              <scr:Expression>new(
  it.Item1 as X,
  it.Item2 as Y,
  new(
    it.Item3 as X,
    it.Item4 as Y
  ) as Nose,
  it.Item5 as Successes,
  it.Item6 as Opacity,
  it.Item7 as State
)</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Trial Results</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>Trial Format</scr:Name>
              <scr:Expression>new(
  it+1 as Trial
)</scr:Expression>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Stop Workflow</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Resized Image</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Filename</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}.avi</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ffmpeg:VideoWriter">
                <ffmpeg:FileName>E:/Xiaoxiao_pursuit/pp_Int/10022026/PP40/GPA2/PP40_GPA2_.avi</ffmpeg:FileName>
                <ffmpeg:Suffix>Timestamp</ffmpeg:Suffix>
                <ffmpeg:Overwrite>false</ffmpeg:Overwrite>
                <ffmpeg:FrameRate>30</ffmpeg:FrameRate>
                <ffmpeg:OutputArguments>-c:v h264_nvenc -preset p1 -b:v 2M -maxrate 4M -bufsize 8M</ffmpeg:OutputArguments>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FrameID</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Trial Results</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Trial Count</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Dot Tracking</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>Format CSV</scr:Name>
              <scr:Expression>new(
  it.Item2.Item1.X as X,
  it.Item2.Item1.Y as Y,
  new(
    it.Item2.Item3.Dot_X as X,
    it.Item2.Item3.Dot_Y as Y
  ) as Green_Dot,
  new(
    it.Item2.Item1.Nose.X as X,
    it.Item2.Item1.Nose.Y as Y
  ) as Nose,
  it.Item2.Item2 + 1 as Trial,
  it.Item2.Item1.Successes as Successes,
  it.Item2.Item1.State as State,
  it.Item1 as Frame
)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Filename</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}.csv</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>E:/Xiaoxiao_pursuit/pp_Int/10022026/PP40/GPA2/PP40_GPA2_.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>Timestamp</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:SerialReadLine">
                <port:PortName>COM8</port:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Read Door Arduino</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Filename</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_Door.csv</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>E:/Xiaoxiao_pursuit/pp_Int/10022026/PP40/GPA2/PP40_GPA2__Door.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>Timestamp</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Trial Results</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>State</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>Bpod State Bytes</scr:Name>
              <scr:Expression>it == 3 ? 2 :
it == 4 ? 4 :
-1</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>LButton RButton Cancel MButton XButton1 XButton2 Space Prior PageUp Next PageDown End Home Left Up Right Control</wie:Filter>
                <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>CTRL + Right</scr:Name>
              <scr:Expression>Convert.ToInt32(it) == 39 ? 10 :
-1</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Stop Workflow</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="ByteProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToArray" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="port:SerialWrite">
                      <port:PortName>COM3</port:PortName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Trial Results</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>State</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>State</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>Arduino State Bytes</scr:Name>
              <scr:Expression>it == 1 ? 4 : it == 3 ? 6 : it == 4 ? 6 : -1</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>None</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionCondition">
              <scr:Expression>Convert.ToInt32(it) == 187 || Convert.ToInt32(it) == 189 || Convert.ToInt32(it) == 219 || Convert.ToInt32(it) == 221 || Convert.ToInt32(it) == 111 || Convert.ToInt32(it) == 106</scr:Expression>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>Arduino Key Bytes</scr:Name>
              <scr:Expression>Convert.ToInt32(it) == 189 ? 0 :
Convert.ToInt32(it) == 187 ? 2 :
Convert.ToInt32(it) == 219 ? 6 :
Convert.ToInt32(it) == 221 ? 7 :
Convert.ToInt32(it) == 111 ? 10 :
Convert.ToInt32(it) == 106 ? 11 :
Convert.ToInt32(it) == 67  ? 22 :
-1</scr:Expression>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>Resized Image</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PredictPose</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dlc:GetBodyPart">
                <dlc:Name>tail-tip</dlc:Name>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Position.X</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>Coord to Bool</scr:Name>
              <scr:Expression>double.IsNaN(it) ? 0 :
1</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PredictPose</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dlc:GetBodyPart">
                <dlc:Name>nose</dlc:Name>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Position.X</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>Coord to Bool</scr:Name>
              <scr:Expression>double.IsNaN(it) ? 0 :
1</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>State</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Read Door Arduino</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionStart</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="ipy:PythonTransform">
                <ipy:Name>Near Door?</ipy:Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Name>In Arena?</ipy:Name>
              <ipy:Script>from System import Tuple
import math

arena = -1
start = 0
ir = 0
ir_active = 0
door = 0
closing = 0
mouse_state = 0

@returns(Tuple[int, int])
def process(value):
  global arena, start, ir, ir_active, door, closing, mouse_state
  tail = value.Item1
  nose = value.Item2
  state = value.Item3
  ard = value.Item4
  ard2 = value.Item5

  if tail == 1 and nose == 1:
    mouse_state = 1
  elif tail == 0 and nose == 0:
    mouse_state = 0
  # else: hold last value

  mouse = mouse_state

  if ard.strip() == 'IR:1':
    ir_active = 1
    ir = 1
  elif ard.strip() == 'IR:0':
    ir_active = 0
  elif ard.strip() == 'DOOR_CLOSING':
    closing = 1
  elif ard.strip() == 'DOOR_CLOSED':
    closing = 0
  elif ard.strip() == 'CLOSE_REVERSED':
    closing = 0

  if ard2 != 1:
    arena = 0
    start = 1
    door = 0
  elif start == 1 and ard == "SESSION_FLASH_DONE":
    arena = 4
    start = 0
  elif mouse == 0 and state == 1 and door == 1:
    arena = 0
    ir = 0
    ir_active = 0
  elif mouse == 0 and state == 1:
    arena = 2
    ir = 0
    ir_active = 0
    if ard.strip() == 'DOOR_OPEN':
      door = 1
  elif mouse == 1 and state == 2:
    arena = 7
    door = 0
  elif mouse == 1 and state == 5 and closing == 1:
    arena = 7
    ir = 0
    ir_active = 0
  elif state == 5 and ard.strip() == 'IR:1':
    ir = 1
  elif mouse == 0 and state == 5 and ir == 1 and ir_active == 0:
    arena = 7
  elif mouse == 1 and state == 5 and ard.strip() == "DOOR_CLOSED":
    arena = 6
    ir = 0
    closing = 0
  else:
    arena = -1
  return Tuple[int, int](arena, ir)
</ipy:Script>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>3</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ArduinoBuffer</Name>
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Name>Ard Cam Session Start</ipy:Name>
              <ipy:Script>@returns(int)
def process(value):
  ard = value
  if ard.strip() == "SESSION":
    check = 1
  else:
    check = 0
  return check</ipy:Script>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>Session Start Check</scr:Name>
              <scr:Expression>it == 1 ? 1 : 0</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>SessionStart</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionCondition">
              <scr:Expression>it == 1</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>State</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionCondition">
              <scr:Expression>it == 6</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Stop Workflow</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:SerialWriteLine">
                <port:PortName>COM8</port:PortName>
                <port:NewLine />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Filename</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_DoorWrite.csv</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>E:/Xiaoxiao_pursuit/pp_Int/10022026/PP40/GPA2/PP40_GPA2__DoorWrite.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>Timestamp</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Canvas</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawImage.bonsai">
              <TextureName>f3</TextureName>
              <ExtentX>0.5</ExtentX>
              <ExtentY>0.5</ExtentY>
              <LocationX>0.6</LocationX>
              <LocationY>0.6</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
              <ScaleX>0</ScaleX>
              <ScaleY>1</ScaleY>
              <ShiftX>0</ShiftX>
              <ShiftY>0</ShiftY>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="10" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="10" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="10" Label="Source3" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source4" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="29" Label="Source1" />
            <Edge From="14" To="28" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="28" Label="Source2" />
            <Edge From="21" To="37" Label="Source1" />
            <Edge From="22" To="28" Label="Source3" />
            <Edge From="23" To="28" Label="Source4" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="28" Label="Source5" />
            <Edge From="26" To="28" Label="Source6" />
            <Edge From="27" To="28" Label="Source7" />
            <Edge From="28" To="29" Label="Source2" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="37" To="39" Label="Source1" />
            <Edge From="38" To="39" Label="Source2" />
            <Edge From="39" To="40" Label="Source1" />
            <Edge From="41" To="45" Label="Source1" />
            <Edge From="42" To="43" Label="Source1" />
            <Edge From="43" To="44" Label="Source1" />
            <Edge From="44" To="45" Label="Source2" />
            <Edge From="46" To="51" Label="Source1" />
            <Edge From="47" To="50" Label="Source1" />
            <Edge From="48" To="50" Label="Source2" />
            <Edge From="49" To="50" Label="Source3" />
            <Edge From="50" To="51" Label="Source2" />
            <Edge From="51" To="52" Label="Source1" />
            <Edge From="52" To="53" Label="Source1" />
            <Edge From="53" To="57" Label="Source1" />
            <Edge From="54" To="55" Label="Source1" />
            <Edge From="55" To="56" Label="Source1" />
            <Edge From="56" To="57" Label="Source2" />
            <Edge From="58" To="59" Label="Source1" />
            <Edge From="59" To="60" Label="Source1" />
            <Edge From="60" To="64" Label="Source1" />
            <Edge From="61" To="62" Label="Source1" />
            <Edge From="62" To="63" Label="Source1" />
            <Edge From="63" To="64" Label="Source2" />
            <Edge From="65" To="66" Label="Source1" />
            <Edge From="66" To="67" Label="Source1" />
            <Edge From="67" To="68" Label="Source1" />
            <Edge From="68" To="76" Label="Source1" />
            <Edge From="69" To="70" Label="Source1" />
            <Edge From="70" To="76" Label="Source2" />
            <Edge From="71" To="72" Label="Source1" />
            <Edge From="72" To="76" Label="Source3" />
            <Edge From="73" To="75" Label="Source1" />
            <Edge From="74" To="75" Label="Source2" />
            <Edge From="75" To="76" Label="Source4" />
            <Edge From="76" To="77" Label="Source1" />
            <Edge From="78" To="79" Label="Source1" />
            <Edge From="79" To="80" Label="Source1" />
            <Edge From="80" To="81" Label="Source1" />
            <Edge From="81" To="82" Label="Source1" />
            <Edge From="82" To="126" Label="Source1" />
            <Edge From="83" To="84" Label="Source1" />
            <Edge From="84" To="85" Label="Source1" />
            <Edge From="85" To="126" Label="Source2" />
            <Edge From="86" To="87" Label="Source1" />
            <Edge From="87" To="88" Label="Source1" />
            <Edge From="88" To="89" Label="Source1" />
            <Edge From="89" To="90" Label="Source1" />
            <Edge From="90" To="91" Label="Source1" />
            <Edge From="91" To="92" Label="Source1" />
            <Edge From="92" To="93" Label="Source1" />
            <Edge From="93" To="104" Label="Source1" />
            <Edge From="94" To="95" Label="Source1" />
            <Edge From="95" To="96" Label="Source1" />
            <Edge From="96" To="97" Label="Source1" />
            <Edge From="97" To="98" Label="Source1" />
            <Edge From="98" To="104" Label="Source2" />
            <Edge From="99" To="100" Label="Source1" />
            <Edge From="100" To="104" Label="Source3" />
            <Edge From="101" To="102" Label="Source1" />
            <Edge From="102" To="104" Label="Source4" />
            <Edge From="103" To="104" Label="Source5" />
            <Edge From="104" To="105" Label="Source1" />
            <Edge From="105" To="106" Label="Source1" />
            <Edge From="106" To="107" Label="Source1" />
            <Edge From="107" To="126" Label="Source3" />
            <Edge From="108" To="115" Label="Source1" />
            <Edge From="109" To="110" Label="Source1" />
            <Edge From="110" To="111" Label="Source1" />
            <Edge From="111" To="112" Label="Source1" />
            <Edge From="112" To="113" Label="Source1" />
            <Edge From="113" To="114" Label="Source1" />
            <Edge From="114" To="115" Label="Source2" />
            <Edge From="115" To="116" Label="Source1" />
            <Edge From="116" To="126" Label="Source4" />
            <Edge From="117" To="125" Label="Source1" />
            <Edge From="118" To="121" Label="Source1" />
            <Edge From="119" To="120" Label="Source1" />
            <Edge From="120" To="121" Label="Source2" />
            <Edge From="121" To="125" Label="Source2" />
            <Edge From="122" To="124" Label="Source1" />
            <Edge From="123" To="124" Label="Source2" />
            <Edge From="124" To="125" Label="Source3" />
            <Edge From="125" To="126" Label="Source5" />
            <Edge From="126" To="127" Label="Source1" />
            <Edge From="127" To="128" Label="Source1" />
            <Edge From="128" To="132" Label="Source1" />
            <Edge From="129" To="130" Label="Source1" />
            <Edge From="130" To="131" Label="Source1" />
            <Edge From="131" To="132" Label="Source2" />
            <Edge From="133" To="134" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>HB</Name>
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        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="11" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>